PsychoPy2experiment version="2021.2.3"
Settings
  Completed URL = https://app.prolific.co/submissions/complete?cc=67BA36CA
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  expName = circle_rotation_short_behav
  logging level = debug
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Routines
  Routine stimulus
    TextComponent fixation
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = +
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    ImageComponent left_gabor
      image = gabor.png
      ori [set every repeat] = left_gabor_ori
      pos = (-0.25, 0)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      texture resolution = 512
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    ImageComponent right_gabor
      image = gabor.png
      ori [set every repeat] = right_gabor_ori
      pos = (0.25, 0)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      texture resolution = 512
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    CodeComponent code_7
      Code Type = Both
      Begin Experiment:
        import random
        rand_int = random.randint(1,100)
        conditions_csv = f'120trials/conditions{rand_int}.csv'
        practice_csv = f'120trials/practice{rand_int}.csv'
      Begin JS Experiment:
        function getRandomInt(min, max) {
          min = Math.ceil(min);
          max = Math.floor(max);
          return Math.floor(Math.random() * (max - min)) + min; //The maximum is exclusive and the minimum is inclusive
          }
        var rand_int = getRandomInt(1, 101)
        console.log(rand_int);
        conditions_csv = `conditions${rand_int}.csv`;
        practice_csv = `practice${rand_int}.csv`;
      Begin JS Routine:
        document.body.style.cursor='none';
      Begin Routine:
        win.mouseVisible = False
  Routine distractor
    TextComponent fixation2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = +
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    ImageComponent left_distractor_prac
      image = gabor.png
      ori [set every repeat] = left_distractor_ori
      pos = (-0.25, 0)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      texture resolution = 512
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    ImageComponent right_distractor_prac
      image = gabor.png
      ori [set every repeat] = right_distractor_ori
      pos = (0.25, 0)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      texture resolution = 512
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  Routine cue
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if cue == 'neutral':
            cue_text.setText('#')
        elif cue == 'right':
            cue_text.setText('>')
        elif cue == 'left':
            cue_text.setText('<')
        else:
            print('cue not found')
    TextComponent cue_text
      letterHeight = 0.1
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      text = cue will be set in code
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    TextComponent fixation3
      letterHeight = 0.1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.6
      text = +
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  Routine impulse
    ImageComponent left_impulse
      image = impulse_probe.png
      pos = (-0.25, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      texture resolution = 512
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    ImageComponent central_impulse
      image = impulse_probe.png
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      texture resolution = 512
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    ImageComponent right_impulse
      image = impulse_probe.png
      pos = (0.25, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      texture resolution = 512
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    TextComponent fixation4
      letterHeight = 0.1
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 0.8
      text = +
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  Routine response
    TextComponent cue_resp
      letterHeight = 0.1
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
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      text:
        Any text

        including line breaks
    ImageComponent probe
      image = gabor.png
      ori [set every frame] = probe_ori
      pos [set every repeat] = (0, 0)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    CodeComponent code_4
      Code Type = Both
      Begin Experiment:
        from math import atan2, degrees

        def get_angle(pos1, pos2):
            delta_x = pos1[0] - pos2[0]
            delta_y = pos1[1] - pos2[1]
            radians = atan2(delta_x, delta_y)
            angle = degrees(radians)

            return angle
      Begin JS Routine:
        document.body.style.cursor='auto';
        start_time = globalClock.getTime();
        if ((cue === "neutral")) {
            if ((probe_x > 0)) {
                cue_resp.setText(">");
            } else if ((probe_x < 0)) {
                cue_resp.setText(">");
            } else {
                console.log("not found");
            }
        } else {
            if (((cue === "right"))||((cue === "left"))) {
                cue_resp.setText("#");
            } else {
                console.log("cue not found");
            }
        }
      Begin Routine:
        win.mouseVisible = True
        #port.write(bytes([probe_trig]))
        start_time = globalClock.getTime()
        drag_in_process = False
        if cue == 'neutral':
            if probe_x > 0:
                cue_resp.setText('>')
            elif probe_x < 0:
                cue_resp.setText('<')
        elif cue == 'right' or cue =='left':
            cue_resp.setText('#')
        else:
            print('cue not found')
      Each Frame:
        try:
            mouse_pos = mouse.getPos()
            angle = get_angle(mouse_pos, probe.pos)
            probe.ori = angle
        except Exception as e:
            print('Error has occured.')
            print(e)

        #if probe_resp.keys=='space':
            #port.write(bytes([subResp_trig]))
        if mouse.getPressed()[0]:
            #port.write(bytes([subResp_trig]))
            continueRoutine=False

        if globalClock.getTime()-start_time >= 5:
            continueRoutine=False
      Each JS Frame:
        var mouse_pos = mouse.getPos();
        var delta_x  = mouse_pos[0] - probe.pos[0];
        var delta_y  = mouse_pos[1] - probe.pos[1];
        var radians = Math.atan2(delta_x, delta_y);
        var angle = radians * (180 / pi);
        console.log(angle)
        probe.ori = -1 * angle;

        if (((globalClock.getTime() - start_time) >= 5)) {
            continueRoutine = false;
            }
      End JS Routine:
        if ((probe.ori > 180)) {
            probe.ori -= 180;
            }
        psychoJS.experiment.addData('response_ori', probe.ori);
      End Routine:
        ##if not probe_resp.keys:
            ##port.write(bytes([subNonResp_trig]))
        #if not mouse.getPressed()[0]:
            #print('no response')
            #port.write(bytes([subNonResp_trig]))

        if probe.ori > 180:
            probe.ori -= 180
        thisExp.addData('response_ori', probe.ori)
    MouseComponent mouse
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
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  Routine welcome
    ImageComponent welcom_ins
      image = welcome.png
      saveStartStop = False
      size = (1.65,1)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent welcome_resp
      allowedKeys = 'space',
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instruction1
    ImageComponent instru1
      image = instruction1.png
      saveStartStop = False
      size = (1.65, 1)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent instru1_resp
      allowedKeys = 'space',
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instruction2
    ImageComponent instru2
      image = instruction2.png
      saveStartStop = False
      size = (1.65, 1)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent instru2_resp
      allowedKeys = 'space',
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instruction3
    ImageComponent instru3
      image = instruction3.png
      saveStartStop = False
      size = (1.65, 1)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent instru3_resp
      allowedKeys = 'space',
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instruction4
    ImageComponent instru4
      image = instruction4.jpg
      saveStartStop = False
      size = (1.65, 1)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent instru4_resp
      allowedKeys = 'space',
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instruction5
    ImageComponent instru5
      image = instruction5.jpg
      saveStartStop = False
      size = (1.65, 1)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent instru5_resp
      allowedKeys = 'space',
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instruction6
    ImageComponent instru6
      image = instruction6.jpg
      saveStartStop = False
      size = (1.65, 1)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent instru6_resp
      allowedKeys = 'space',
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instruction7
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  Routine recap_instruction
    ImageComponent recap_instru
      image = recap.jpg
      saveStartStop = False
      size = (1.65, 1)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent recap_resp
      allowedKeys = 'space','r'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_2
      Code Type = Auto->JS
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      End Routine:
        if recap_resp.keys=='space':
            instru_trials.finished=True
  Routine feedback
    CodeComponent code_3
      Code Type = Both
      Begin Experiment:
        corr_number = 0
      Begin JS Experiment:
        corr_number = 0;
      Begin JS Routine:
        response_ori = ((360 - probe.ori) % 180);
        degrees_off = Math.abs(((response_ori % 180) - ((360 - correct_response) % 180)));
        if ((degrees_off > 90)) {
            degrees_off=(180-degrees_off);
        }
        if ((probe_resp.keys === undefined)) {
            feedback_text.setText("Oops, you missed the response. Please respond within 5 seconds.");
        } else {
            if ((Math.round(degrees_off) <= 20)) {
                corr_number += 1;
                feedback_text.setText("You did a great job on that!");
            } else {
                feedback_text.setText("You were off a few degrees. You can do better next time.");
            }
        }
      Begin Routine:
        #local version the positive is clockwise, negative is counterclockwise
        #but online version positive is counterclockwise, negative is clockwise
        #change subject's response to the local version (positive=clockwise)
        #response_ori = (360-probe.ori)%180 don't need this line when running local version
        response_ori=probe.ori
        #calculate the degrees_off, need to convert the "correct_response" to the local version as well
        degrees_off = abs(response_ori % 180 - correct_response % 180)
        if degrees_off > 90:
            degrees_off=180-degrees_off
        if not mouse.getPressed()[0]:
        #if probe_resp.keys is None:
            feedback_text.setText(f'Oops, you missed the response. Please respond within 5 seconds.')
        elif round(degrees_off) <= 20:
            corr_number += 1
            feedback_text.setText(f'You did a great job on that!')
        else:
            feedback_text.setText(f'You were off a few degrees. You can do better next time.')
    TextComponent feedback_text
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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      text:
        Any text

        including line breaks
  Routine end_feedback
    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        if practice.thisN==(practice.nReps-1):
            total_acc=corr_number/(practice.nTotal+1)
            if total_acc>=0.8:
                end_feedback_txt.setText('Your total accuracy in practice session is '+str(total_acc)+'.\nYou can enter to the main session.\nPress space button to continue.')
                practice_loop.finished=True
            else:
                end_feedback_txt.setText('Your total accuracy in practice session is '+str(total_acc)+'.\nPlease practice one more time.\nPress space button to repeat the practice session.')
      Each Frame:
        if practice.thisN!=(practice.nReps-1):
            end_feedback_txt.status=FINISHED
            key_resp_2.status=FINISHED
    TextComponent end_feedback_txt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Any text

        including line breaks
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine main_session
    TextComponent begin_text
      letterHeight = 0.08
      startVal [time (s)] = 0.0
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      text:
        Congratulation! You enter the main session!
        Your task is identical to the practice session, but the stimuli will be displayed slightly faster.

        Please press space button to start.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_8
      Code Type = Auto->JS
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      Begin Experiment:
        trial_index = 1
  Routine end_training_feedback
    CodeComponent code_6
      Code Type = Both
      Begin Experiment:
        fail_number=0
      Begin JS Experiment:
        fail_number = 0;
      Begin JS Routine:
        total_acc = Math.round(((corr_number / practice.nTotal) * 100));
        if ((corr_number >= 9)) {
            end_feedback_text.setText("Your total accuracy in practice session is above 80%.\nYou can enter to the main session.\nPress space button to continue.");
            practice_loop.finished = true;
        } else {
            corr_number = 0;
            fail_number += 1;
            if ((fail_number === 10)) {
                end_feedback_text.setText("You failed too many times. Thanks for your interest! Please email 'P5DONE' to researcher and get 0.5 credit. \n Press space to exit.");
            } else {
                end_feedback_text.setText((("Your total accuracy in practice session is " + total_acc.toString()) + "%.\nPlease practice one more time.\nPress space button to repeat the practice session."));
            }
        }
      Begin Routine:
        #the total number of practice is 13, 10 times correct number is fine to pass.
        total_acc=round(corr_number/practice.nTotal * 100)
        if corr_number>=9:
            end_feedback_text.setText('Your total accuracy in practice session is above 70%.\nYou can enter to the main session.\nPress space button to continue.')
            practice_loop.finished = True
        else:
            corr_number = 0
            fail_number+=1
            if fail_number==10:
                end_feedback_text.setText("You failed too many times. Thanks for your interest! Please email 'P5DONE' to researcher and get 0.5 credit.\n Press space to exit.")
            else:
                end_feedback_text.setText('Your total accuracy in practice session is '+str(total_acc)+'%.\nPlease practice one more time.\nPress space button to repeat the practice session.')
      End JS Routine:
        if ((fail_number === 5)) {
            psychoJS.quit();
        }
      End Routine:
        if fail_number==10:
            core.quit()
        if key_resp_4.keys[0]=='p':
            practice_loop.finished = True
    TextComponent end_feedback_text
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Any text

        including line breaks
    KeyboardComponent key_resp_4
      allowedKeys = 'space','p'
      forceEndRoutine = True
      startVal [time (s)] = 2
      store = nothing
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  Routine quit_expt
    TextComponent end
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent code_9
      Code Type = Auto->JS
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      Begin Routine:
        if fail_number==2:
            end.setText('Thanks for your participant! The experiment ends now.')
            end.draw()
            win.flip()
            core.wait(3)
            core.quit()
  Routine consent1
    ImageComponent consentimage1
      image = consent1_sona.png
      saveStartStop = False
      size = (1, 1)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent key_resp_5
      allowedKeys = 'space',
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine consent2
    ImageComponent consentimage2
      image = consent2_sona.png
      saveStartStop = False
      size = (1, 1)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent key_resp_8
      allowedKeys = 'space',
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine consent3
    ImageComponent consentimage3
      image = consent3.png
      saveStartStop = False
      size = (1, 1)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine consent_instruct
    TextComponent consent_instr
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Consent form will be shown. Press space to continue through each slide. Click Accept button to continue with experiment or do no accept to exit.
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    KeyboardComponent key_resp_6
      allowedKeys = 'space',
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine bye
    TextComponent ending
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        Congrats! You complete the whole experiment!
        Thank you for participating!
    CodeComponent code_10
      Code Type = Auto->JS
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      End Experiment:
        #port.write(stopSaveflag)
        #port.close()
  Routine ITI
    TextComponent buffer
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    CodeComponent code_11
      Code Type = Auto->JS
  Routine rest
    CodeComponent code_12
      Code Type = Both
      Begin Routine:
        #port.write([endofBlock_trig])
        #port.write(stopSaveflag)
      Each Frame:
        if (trials.thisTrialN+1) % 40 == 0 and trials.thisTrialN > 0 and trials.thisTrialN != 119:
            continueRoutine = True
        else:
            continueRoutine = False
      Each JS Frame:
        if ((((((snapshot.thisN + 1) % 40) === 0) && (snapshot.thisN > 0)) && (snapshot.thisN !== 119))) {
            continueRoutine = true;
        } else {
            continueRoutine = false;
        }
      End Routine:
        #port.write(startSaveflag)
    TextComponent take_break
      letterHeight = 0.1
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text [set every frame] = $round(30-t)
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    TextComponent break_text
      letterHeight = 0.1
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text = Take a 30s short break.
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  Routine consent_3
    ImageComponent consentimage_3
      image = consent3_sona.png
      pos = (0, 0.1)
      saveStartStop = False
      size = (1, 1)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent accept_button
      image = accept.png
      pos = (-0.45, -0.45)
      saveStartStop = False
      size = (0.1, 0.05)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent not_accept_button
      image = not_accept.png
      pos = (0.45, -0.45)
      saveStartStop = False
      size = (0.1, 0.05)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    MouseComponent accept_mouse
      clickable = accept_button, not_accept_button
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine stimulus_main
    TextComponent fix_cross
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.4
      text = +
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    ImageComponent left_target
      image = gabor.png
      ori [set every repeat] = left_gabor_ori
      pos = (-0.25, 0)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75
      texture resolution = 512
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    ImageComponent right_target
      image = gabor.png
      ori [set every repeat] = right_gabor_ori
      pos = (0.25, 0)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75
      texture resolution = 512
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    CodeComponent code_1
      Code Type = Both
      Begin Experiment:
        #import random
        #import serial

        #rand_int = random.randint(1,100)
        #conditions_csv = f'conditions{rand_int}.csv'
        #practice_csv = f'practice{rand_int}.csv'

        #port=serial.Serial('COM7',baudrate=115200)
        #port.close()

        #startSaveflag=bytes([254])
        #stopSaveflag=bytes([255])

        #cuetrigDict={'left':101,'neutral':103,'right':105}
        #target_trig=151
        #distractor_trig=153

        #probe_trig=155
        #subResp_trig=157
        #subNonResp_trig=159

        #endofBlock_trig=161

        #port.open()
        #port.write(startSaveflag)
      Begin JS Experiment:
        function getRandomInt(min, max) {
          min = Math.ceil(min);
          max = Math.floor(max);
          return Math.floor(Math.random() * (max - min)) + min; //The maximum is exclusive and the minimum is inclusive
          }
        var rand_int = getRandomInt(1, 101)
        console.log(rand_int);
        conditions_csv = `conditions${rand_int}.csv`;
        practice_csv = `practice${rand_int}.csv`;
      Begin JS Routine:
        document.body.style.cursor='none';
      Begin Routine:
        win.mouseVisible = False
        #port.write(bytes([target_trig]))
      End Experiment:
        port.close()
  Routine distractor_main
    TextComponent fix_cross2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.4
      text = +
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    ImageComponent left_distractor_main
      image = gabor.png
      ori [set every repeat] = left_distractor_ori
      pos = (-0.25, 0)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75
      texture resolution = 512
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    ImageComponent right_distractor_main
      image = gabor.png
      ori [set every repeat] = right_distractor_ori
      pos = (0.25, 0)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75
      texture resolution = 512
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    CodeComponent code_13
      Code Type = Auto->JS
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      Begin Routine:
        #port.write(bytes([distractor_trig]))
  Routine cue_main
    CodeComponent code_14
      Code Type = Auto->JS
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      Begin Routine:
        if cue == 'neutral':
            main_cue.setText('#')
        elif cue == 'right':
            main_cue.setText('>')
        elif cue == 'left':
            main_cue.setText('<')
        else:
            print('cue not found')

        #cue_trig=cuetrigDict[cue]
        #port.write(bytes([cue_trig]))
    TextComponent main_cue
      letterHeight = 0.1
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      text = cue will be set in code
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    TextComponent fix_cross3
      letterHeight = 0.1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.6
      text = +
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  Routine impulse_main
    ImageComponent left_impulse_main
      image = impulse_probe.png
      pos = (-0.25, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      texture resolution = 512
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    ImageComponent central_impulse_main
      image = impulse_probe.png
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      texture resolution = 512
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    ImageComponent right_impulse_main
      image = impulse_probe.png
      pos = (0.25, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      texture resolution = 512
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    TextComponent fix_cross4
      letterHeight = 0.1
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 0.4
      text = +
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  Routine ITI_2
Flow
  Routine welcome
  LoopInitiator instru_trials loopType="TrialHandler"
    loopType = random
    nReps = 99
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    Routine instruction1
    Routine instruction2
    Routine instruction3
    Routine instruction4
    Routine instruction5
    Routine instruction6
    Routine recap_instruction
  LoopTerminator instru_trials
  LoopInitiator practice_loop loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 10
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    LoopInitiator practice loopType="TrialHandler"
      conditionsFile = $practice_csv
      loopType = random
      nReps = 1
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      Routine stimulus
      Routine distractor
      Routine cue
      Routine response
      Routine feedback
      Routine ITI
    LoopTerminator practice
    Routine end_training_feedback
  LoopTerminator practice_loop
  Routine main_session
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $conditions_csv
    loopType = random
    nReps = 1
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    Routine stimulus_main
    Routine distractor_main
    Routine cue_main
    Routine response
    Routine ITI
    Routine rest
  LoopTerminator trials
  Routine bye
